PsychoPy2experiment version="1.78.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = moral_dilemma
  Units = use prefs
  Screen = 1
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Routines
  Routine control
    ImageComponent ctrl_image
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image [set every repeat] = $control_image
      size = [1, 1.3]
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    SoundComponent sound_1
      sound [set every repeat] = $control_sound
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 5
      forceEndRoutine = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 0
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  Routine trial
    TextComponent instruct
      text = This are the instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine dilemma
    ImageComponent dil_image
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image [set every repeat] = $dilemma_image
      size = [1,1.3]
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    SoundComponent sound_2
      sound [set every repeat] = $dilemma_sound
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 5
      forceEndRoutine = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 0
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  Routine thanks
    TextComponent text
      text = Thanks!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent text_instruct
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please respond:

        'YES' with your index finger

        or

        'NO' with your middle finger

        for each vignette.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d1.JPG', 'control_sound': u'./audio_prompts/control25.wav', 'control_image': u'./control_vignettes/c1.JPG', 'dilemma_sound': u'./audio_prompts/dilema1.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d2.JPG', 'control_sound': u'./audio_prompts/control26.wav', 'control_image': u'./control_vignettes/c2.JPG', 'dilemma_sound': u'./audio_prompts/dilema2.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d3.JPG', 'control_sound': u'./audio_prompts/control27.wav', 'control_image': u'./control_vignettes/c3.JPG', 'dilemma_sound': u'./audio_prompts/dilema3.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d4.JPG', 'control_sound': u'./audio_prompts/control28.wav', 'control_image': u'./control_vignettes/c4.JPG', 'dilemma_sound': u'./audio_prompts/dilema4.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d5.JPG', 'control_sound': u'./audio_prompts/control29.wav', 'control_image': u'./control_vignettes/c5.JPG', 'dilemma_sound': u'./audio_prompts/dilema5.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d6.JPG', 'control_sound': u'./audio_prompts/control30.wav', 'control_image': u'./control_vignettes/c6.jpg', 'dilemma_sound': u'./audio_prompts/dilema6.wav'}]
    Routine control
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d1.JPG', 'control_sound': u'./audio_prompts/control25.wav', 'control_image': u'./control_vignettes/c1.JPG', 'dilemma_sound': u'./audio_prompts/dilema1.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d2.JPG', 'control_sound': u'./audio_prompts/control26.wav', 'control_image': u'./control_vignettes/c2.JPG', 'dilemma_sound': u'./audio_prompts/dilema2.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d3.JPG', 'control_sound': u'./audio_prompts/control27.wav', 'control_image': u'./control_vignettes/c3.JPG', 'dilemma_sound': u'./audio_prompts/dilema3.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d4.JPG', 'control_sound': u'./audio_prompts/control28.wav', 'control_image': u'./control_vignettes/c4.JPG', 'dilemma_sound': u'./audio_prompts/dilema4.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d5.JPG', 'control_sound': u'./audio_prompts/control29.wav', 'control_image': u'./control_vignettes/c5.JPG', 'dilemma_sound': u'./audio_prompts/dilema5.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d6.JPG', 'control_sound': u'./audio_prompts/control30.wav', 'control_image': u'./control_vignettes/c6.jpg', 'dilemma_sound': u'./audio_prompts/dilema6.wav'}]
    Routine dilemma
  LoopTerminator trials_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_2.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d7.JPG', 'control_sound': u'./audio_prompts/control31.wav', 'control_image': u'./control_vignettes/c7.JPG', 'dilemma_sound': u'./audio_prompts/dilema7.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d8.JPG', 'control_sound': u'./audio_prompts/control32.wav', 'control_image': u'./control_vignettes/c8.JPG', 'dilemma_sound': u'./audio_prompts/dilema8.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d9.JPG', 'control_sound': u'./audio_prompts/control33.wav', 'control_image': u'./control_vignettes/c9.JPG', 'dilemma_sound': u'./audio_prompts/dilema9.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d10.JPG', 'control_sound': u'./audio_prompts/control34.wav', 'control_image': u'./control_vignettes/c10.JPG', 'dilemma_sound': u'./audio_prompts/dilema10.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d11.JPG', 'control_sound': u'./audio_prompts/control35.wav', 'control_image': u'./control_vignettes/c11.JPG', 'dilemma_sound': u'./audio_prompts/dilema11.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d12.JPG', 'control_sound': u'./audio_prompts/control36.wav', 'control_image': u'./control_vignettes/c12.jpg', 'dilemma_sound': u'./audio_prompts/dilema12.wav'}]
    Routine control
  LoopTerminator trials
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_2.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d7.JPG', 'control_sound': u'./audio_prompts/control31.wav', 'control_image': u'./control_vignettes/c7.JPG', 'dilemma_sound': u'./audio_prompts/dilema7.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d8.JPG', 'control_sound': u'./audio_prompts/control32.wav', 'control_image': u'./control_vignettes/c8.JPG', 'dilemma_sound': u'./audio_prompts/dilema8.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d9.JPG', 'control_sound': u'./audio_prompts/control33.wav', 'control_image': u'./control_vignettes/c9.JPG', 'dilemma_sound': u'./audio_prompts/dilema9.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d10.JPG', 'control_sound': u'./audio_prompts/control34.wav', 'control_image': u'./control_vignettes/c10.JPG', 'dilemma_sound': u'./audio_prompts/dilema10.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d11.JPG', 'control_sound': u'./audio_prompts/control35.wav', 'control_image': u'./control_vignettes/c11.JPG', 'dilemma_sound': u'./audio_prompts/dilema11.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d12.JPG', 'control_sound': u'./audio_prompts/control36.wav', 'control_image': u'./control_vignettes/c12.jpg', 'dilemma_sound': u'./audio_prompts/dilema12.wav'}]
    Routine dilemma
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_3.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d13.JPG', 'control_sound': u'./audio_prompts/control37.wav', 'control_image': u'./control_vignettes/c13.JPG', 'dilemma_sound': u'./audio_prompts/dilema13.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d14.JPG', 'control_sound': u'./audio_prompts/control38.wav', 'control_image': u'./control_vignettes/c14.JPG', 'dilemma_sound': u'./audio_prompts/dilema14.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d15.JPG', 'control_sound': u'./audio_prompts/control39.wav', 'control_image': u'./control_vignettes/c15.JPG', 'dilemma_sound': u'./audio_prompts/dilema15.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d16.JPG', 'control_sound': u'./audio_prompts/control40.wav', 'control_image': u'./control_vignettes/c16.JPG', 'dilemma_sound': u'./audio_prompts/dilema16.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d17.JPG', 'control_sound': u'./audio_prompts/control41.wav', 'control_image': u'./control_vignettes/c17.JPG', 'dilemma_sound': u'./audio_prompts/dilema17.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d18.JPG', 'control_sound': u'./audio_prompts/control42.wav', 'control_image': u'./control_vignettes/c18.JPG', 'dilemma_sound': u'./audio_prompts/dilema18.wav'}]
    Routine control
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_3.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d13.JPG', 'control_sound': u'./audio_prompts/control37.wav', 'control_image': u'./control_vignettes/c13.JPG', 'dilemma_sound': u'./audio_prompts/dilema13.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d14.JPG', 'control_sound': u'./audio_prompts/control38.wav', 'control_image': u'./control_vignettes/c14.JPG', 'dilemma_sound': u'./audio_prompts/dilema14.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d15.JPG', 'control_sound': u'./audio_prompts/control39.wav', 'control_image': u'./control_vignettes/c15.JPG', 'dilemma_sound': u'./audio_prompts/dilema15.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d16.JPG', 'control_sound': u'./audio_prompts/control40.wav', 'control_image': u'./control_vignettes/c16.JPG', 'dilemma_sound': u'./audio_prompts/dilema16.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d17.JPG', 'control_sound': u'./audio_prompts/control41.wav', 'control_image': u'./control_vignettes/c17.JPG', 'dilemma_sound': u'./audio_prompts/dilema17.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d18.JPG', 'control_sound': u'./audio_prompts/control42.wav', 'control_image': u'./control_vignettes/c18.JPG', 'dilemma_sound': u'./audio_prompts/dilema18.wav'}]
    Routine dilemma
  LoopTerminator trials_6
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_4.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d19.JPG', 'control_sound': u'./audio_prompts/control43.wav', 'control_image': u'./control_vignettes/c19.jpg', 'dilemma_sound': u'./audio_prompts/dilema19.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d20.JPG', 'control_sound': u'./audio_prompts/control44.wav', 'control_image': u'./control_vignettes/c20.JPG', 'dilemma_sound': u'./audio_prompts/dilema20.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d21.JPG', 'control_sound': u'./audio_prompts/control45.wav', 'control_image': u'./control_vignettes/c21.JPG', 'dilemma_sound': u'./audio_prompts/dilema21.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d22.JPG', 'control_sound': u'./audio_prompts/control46.wav', 'control_image': u'./control_vignettes/c22.JPG', 'dilemma_sound': u'./audio_prompts/dilema22.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d23.JPG', 'control_sound': u'./audio_prompts/control47.wav', 'control_image': u'./control_vignettes/c23.JPG', 'dilemma_sound': u'./audio_prompts/dilema23.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d24.JPG', 'control_sound': u'./audio_prompts/control48.wav', 'control_image': u'./control_vignettes/c24.JPG', 'dilemma_sound': u'./audio_prompts/dilema24.wav'}]
    Routine control
  LoopTerminator trials_7
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = moral_dilemma_targets_4.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'dilemma_image': u'./dilemma_vignettes/d19.JPG', 'control_sound': u'./audio_prompts/control43.wav', 'control_image': u'./control_vignettes/c19.jpg', 'dilemma_sound': u'./audio_prompts/dilema19.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d20.JPG', 'control_sound': u'./audio_prompts/control44.wav', 'control_image': u'./control_vignettes/c20.JPG', 'dilemma_sound': u'./audio_prompts/dilema20.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d21.JPG', 'control_sound': u'./audio_prompts/control45.wav', 'control_image': u'./control_vignettes/c21.JPG', 'dilemma_sound': u'./audio_prompts/dilema21.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d22.JPG', 'control_sound': u'./audio_prompts/control46.wav', 'control_image': u'./control_vignettes/c22.JPG', 'dilemma_sound': u'./audio_prompts/dilema22.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d23.JPG', 'control_sound': u'./audio_prompts/control47.wav', 'control_image': u'./control_vignettes/c23.JPG', 'dilemma_sound': u'./audio_prompts/dilema23.wav'},
      {'dilemma_image': u'./dilemma_vignettes/d24.JPG', 'control_sound': u'./audio_prompts/control48.wav', 'control_image': u'./control_vignettes/c24.JPG', 'dilemma_sound': u'./audio_prompts/dilema24.wav'}]
    Routine dilemma
  LoopTerminator trials_8
  Routine thanks
